CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"FileLocation": "text", "Frame": "text", "Name": "text", "Series": "none", "cell_filename": "text", "cell_id": "integer", "cell_type": "text", "image_id": "integer", "wbc_category": "text"}
    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Name>[A-z]{10})_(?P<image_id>[0-9]{4})_(?P<cell_id>[0-9]{2})\.jpg
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|C:\\Linda\\generated
    Match file and image metadata:[{'CSV Metadata': 'cell_id', 'Image Metadata': 'cell_id'}, {'CSV Metadata': 'image_id', 'Image Metadata': 'image_id'}]
    Use case insensitive matching?:No
    Metadata file name:vsetko+original_cropped.csv
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|C:\\Linda\\generated
    Match file and image metadata:[{'CSV Metadata': 'image_id', 'Image Metadata': 'image_id'}, {'CSV Metadata': 'cell_id', 'Image Metadata': 'cell_id'}]
    Use case insensitive matching?:No
    Metadata file name:vsetko+original_cropped.csv
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:BCCD
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:BCCD
    Conversion method:Split
    Image type:HSV
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    Convert hue to gray?:No
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    Convert saturation to gray?:Yes
    Name the output image:OrigSaturation
    Convert value to gray?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:OrigSaturation
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):80,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureImageAreaOccupied:[module_num:7|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
    Measure the area occupied by:Objects
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    Select object sets to measure:IdentifyPrimaryObjects

MeasureGranularity:[module_num:8|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
    Select images to measure:OrigSaturation
    Measure within objects?:No
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    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:10|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
    Select images to measure:OrigSaturation
    Select objects to measure:IdentifyPrimaryObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

Threshold:[module_num:11|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
    Select the input image:OrigSaturation
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:OrigSaturation
    Select objects to measure:IdentifyPrimaryObjects

ClassifyObjects:[module_num:13|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
    Make classification decision based on:Single measurement
    Hidden:1
    Hidden:1
    Select the object to be classified:IdentifyPrimaryObjects
    Select the measurement to classify by:AreaShape_Area
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model
    Allow fuzzy feature matching?:No

ExportToDatabase:[module_num:14|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Elsewhere...|C:\\Linda\\generated
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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